<Configuration>
    <Server
        maxThreads="20"
        port="1080"/>

    <Pipeline
        name="in"
        root="/data/dicom/in">
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            name="DicomImportService: in"
            port="{{ or (getenv "CTP_IN_PORT") "11111" }}"
            calledAETTag="00097770"
            callingAETTag="00097772"
            connectionIPTag="00097774"
            timeTag="00097776"
            quarantine="quarantines/DicomImportService"
            root="roots/DicomImportService">
            <accept callingAET="{{ getenv "CTP_REMOTE_AET" }}"/>
        </DicomImportService>
        <DirectoryStorageService
            acceptDuplicates="no"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            defaultString=""
            logDuplicates="no"
            name="DirectoryStorageService"
            quarantine="quarantines/DirectoryStorageService"
            root="/data/cad/in"
            setStandardExtensions="no"
            structure="[0020,000d]/[0020,000e]"
            whitespaceReplacement="_"/>
    </Pipeline>

    <Pipeline
        name="out"
        root="/data/dicom/out">
       <DirectoryImportService
           class="org.rsna.ctp.stdstages.DirectoryImportService"
           import="/data/cad/out"
           name="DirectoryImportService"
           quarantine="quarantines/DirectoryImportService"
           root="roots/DirectoryImportService"/>
       <DicomExportService
           class="org.rsna.ctp.stdstages.DicomExportService"
           name="DicomExportService"
           quarantine="quarantines/DicomExportService"
           root="roots/DicomExportService"
           associationTimeout="5"
           url="dicom://{{ getenv "CTP_REMOTE_AET" }}:{{ getenv "CTP_AET" }}@{{ getenv "CTP_REMOTE_HOST" }}:{{ getenv "CTP_REMOTE_PORT" }}"/>
    </Pipeline>

</Configuration>
